/gamos/setParam GmGeometryFromText:FileName escalera.geom
/gamos/setParam GmGeometryFromText:FileNameParallel parallelMesh.geom 1
/gamos/geometry GmGeometryFromText
/gamos/physicsList GmEMPhysics 
/gamos/generator GmGenerator

/run/initialize

/gamos/physics/addParallelProcess

# Fuente de rayos X 
/gamos/generator/addSingleParticleSource fuente gamma 28.*keV
/gamos/generator/positionDist fuente GmGenerDistPositionPoint 0. 0. 0.
/gamos/generator/directionDist fuente GmGenerDistDirectionCone 0. 0. 1. 1.5*deg
/gamos/generator/energyDist fuente GmGenerDistEnergyFromFile beamprobW28kV interpolate

# Faster multiple scattering
/process/msc/StepLimit Minimal

### Print some info
/gamos/userAction GmCountProcessesUA
/gamos/userAction GmCountTracksUA


/gamos/random/restoreSeeds 1201 104

/control/execute visVRML2FILE.in

/tracking/verbose 1
/run/beamOn 50

